PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = (1920, 1080)
  blendMode = nofbo
  expName = RSVP Reading Task
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the RSVP Reading Task.

        You will see sentences presented one word at a time.

        After each sentence, you will answer a comprehension question.

        Press SPACE to begin.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent fixation_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sentence_setup
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    CodeComponent sentence_setup_code
      Code Type = Py
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      Begin Routine:
        words = sentence.split()
        print("SENTENCE:", sentence)
        print("WORDS:", words)
        print("QUESTION:", question)
        print("OPTIONS:", option1, option2, option3, option4)
        print("CORRECT:", correctKey)
  Routine grace_period
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    TextComponent grace_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine rsvp
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    CodeComponent rsvp_code
      Code Type = Py
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      Begin Experiment:
        wordDuration = 0.25
        currentWord = ""
      Begin Routine:
        currentWord = words[word_loop.thisN]
        print(word_loop.thisN, currentWord)
      Each Frame:
        if t >= wordDuration:
            continueRoutine = False
    TextComponent word_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentWord
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  Routine comprehension
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    TextComponent question_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question + "\n\n1 - " + option1 + "\n2 - " + option2 + "\n3 - " + option3 + "\n4 - " + option4
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    KeyboardComponent comprehension_key
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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Flow
  Routine instructions
  LoopInitiator sentence_loop loopType="TrialHandler"
    conditionsFile = C:/Users/berka/Desktop/lab/rsvp-reading-task/stimuli/rsvp_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sentence_id': 1, 'sentence': 'My father takes me to school every day in his big green car', 'question': 'How does the father take the child to school?', 'option1': 'By car', 'option2': 'By bus', 'option3': 'By boat', 'option4': 'On foot', 'correctKey': 1},
      {'sentence_id': 2, 'sentence': 'Nothing could ever be better than a hot fire to warm you up', 'question': 'What is used to warm you up?', 'option1': 'A hot fire', 'option2': 'A cold drink', 'option3': 'A fan', 'option4': 'A window', 'correctKey': 1}]
    Routine fixation
    Routine sentence_setup
    Routine grace_period
    LoopInitiator word_loop loopType="TrialHandler"
      loopType = sequential
      nReps = $len(words)
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      Routine rsvp
    LoopTerminator word_loop
    Routine comprehension
  LoopTerminator sentence_loop
