PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = (1920, 1080)
  blendMode = nofbo
  color = $[0,0,0]
  colorSpace = dkl
  expName = RSVP Reading Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Reading Task

        You will see sentences presented
        one word at a time.

        Read each word aloud as it appears.

        Press SPACE when you see the + sign
        to begin each sentence.

        Try to read as accurately as possible.

        Press SPACE to continue.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instructions
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    TextComponent practice_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice Trials

        You will complete a few practice trials.

        Read each word aloud as it appears.

        Press SPACE at the fixation cross
        to begin each sentence.

        Press SPACE to start practicing.
    KeyboardComponent practice_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rsvp
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    CodeComponent rsvp_code
      Code Type = Py
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      Begin Experiment:
        # Initial word duration
        wordDuration = 0.25

        # Current word
        currentWord = ""

        # Staircase settings
        stepSize = 0.025
        minDuration = 0.05
        maxDuration = 1.0

        # Consecutive correct responses
        correctStreak = 0

        # Reversal tracking
        lastDirection = 0
        reversalCount = 0
        reversalDurations = []

        import csv

        # Create a separate CSV for sentence-level results
        sentenceDataPath = thisExp.dataFileName + "_sentences.csv"

        sentenceDataFile = open(
            sentenceDataPath,
            "w",
            newline="",
            encoding="utf-8"
        )

        sentenceWriter = csv.writer(sentenceDataFile)

        # Column headers
        sentenceWriter.writerow([
            "participant",
            "session",
            "sentence_id",
            "sentence",
            "word_count",
            "word_duration",
            "response",
            "next_word_duration",
            "correct_streak",
            "staircase_direction",
            "reversal_count"
        ])

        # Latin Square counterbalancing
        participantID = int(expInfo['participant'])

        # 20 possible orders (0–19)
        orderIndex = (participantID - 1) % 20

        # Generate sentence order
        sentenceOrder = list(range(20))
        sentenceOrder = sentenceOrder[orderIndex:] + sentenceOrder[:orderIndex]

        print("Participant:", participantID)
        print("Sentence order:", sentenceOrder)
      Begin Routine:
        currentWord = words[word_loop.thisN]
        print(word_loop.thisN, currentWord)
      Each Frame:
        if t >= wordDuration - frameTolerance:
            continueRoutine = False
      End Experiment:
        # Close sentence-level CSV file
        if not sentenceDataFile.closed:
            sentenceDataFile.flush()
            sentenceDataFile.close()

        print("Sentence-level CSV saved:", sentenceDataPath)
    CodeComponent orp_code
      Code Type = Auto->JS
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      Begin Routine:
        word_text.setText(currentWord)
        word_text.alignText = 'left'
        word_text.anchorHoriz = 'left'
        word_text.setPos((0, 0))
    TextComponent word_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wordDuration
      text [set every repeat] = $currentWord
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent fixation_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_fixation
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    TextComponent practice_fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent practice_fixation_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sentence_setup
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    CodeComponent sentence_setup_code
      Code Type = Py
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      Begin Routine:
        words = sentence.split()

        print("SENTENCE:", sentence)
        print("WORDS:", words)

        thisExp.addData('wordDuration', wordDuration)

        # Store duration used for this sentence
        sentenceWordDuration = wordDuration
  Routine practice_sentence_setup
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    CodeComponent practice_sentence_setup_code
      Code Type = Py
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      Begin Routine:
        words = sentence.split()

        print("PRACTICE SENTENCE:", sentence)
        print("WORDS:", words)
  Routine grace_period
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    TextComponent grace_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_grace_period
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    TextComponent practice_grace_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_rsvp
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    CodeComponent practice_rsvp_code
      Code Type = Py
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      Begin Experiment:
        wordDuration = 0.25
        currentWord = ""
      Begin Routine:
        currentWord = words[practice_word_loop.thisN]
        print(practice_word_loop.thisN, currentWord)

        practice_word_text.anchor = 'center'
        practice_word_text.pos = (0, 0)
      Each Frame:
        if t >= wordDuration - frameTolerance:
            continueRoutine = False
    CodeComponent practice_alignment_code
      Code Type = Auto->JS
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      Begin Routine:
        practice_word_text.alignText = 'left'
        practice_word_text.anchorHoriz = 'left'
        practice_word_text.setPos((0, 0))
    TextComponent practice_word_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = $currentWord
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  Routine comprehension
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    TextComponent question_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question + "\n\n1 - " + option1 + "\n2 - " + option2 + "\n3 - " + option3 + "\n4 - " + option4
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    KeyboardComponent comprehension_key
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practice_comprehension
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    TextComponent practice_question_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question + "\n\n1 - " + option1 + "\n2 - " + option2 + "\n3 - " + option3 + "\n4 - " + option4
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    KeyboardComponent practice_comprehension_key
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine experimenter_response
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    TextComponent response_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Experimenter: Press 1 or 0 to continue.
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    KeyboardComponent experimenter_key
      allowedKeys = '0','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent staircase_code
      Code Type = Py
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      End Routine:
        # Get experimenter's response
        response = experimenter_key.keys

        # Track duration change
        direction = 0

        # 2-down / 1-up staircase
        if response == '1':
            correctStreak += 1

            if correctStreak >= 2:
                newDuration = max(minDuration, wordDuration - stepSize)

                if newDuration < wordDuration:
                    direction = -1  # Faster

                wordDuration = newDuration
                correctStreak = 0

        elif response == '0':
            newDuration = min(maxDuration, wordDuration + stepSize)

            if newDuration > wordDuration:
                direction = 1  # Slower

            wordDuration = newDuration
            correctStreak = 0

        # Detect reversals
        if direction != 0:
            if lastDirection != 0 and direction != lastDirection:
                reversalCount += 1
                reversalDurations.append(wordDuration)

                print("REVERSAL:", reversalCount,
                      "Duration:", wordDuration)

            lastDirection = direction

        # Save sentence-level data
        thisExp.addData('sentenceID', sentence_id)
        thisExp.addData('sentenceText', sentence)
        thisExp.addData('sentenceWordCount', len(words))
        thisExp.addData('sentenceWordDuration', sentenceWordDuration)

        # Experimenter response
        thisExp.addData('staircase_response', response)

        # Staircase state after response
        thisExp.addData('nextWordDuration', wordDuration)
        thisExp.addData('correctStreak', correctStreak)
        thisExp.addData('staircaseDirection', direction)
        thisExp.addData('reversalCount', reversalCount)

        print("Response:", response)
        print("Next word duration:", wordDuration)
        print("Correct streak:", correctStreak)
        print("Reversals:", reversalCount)

        # Write one row per sentence
        sentenceWriter.writerow([
            expInfo['participant'],
            expInfo['session'],
            sentence_id,
            sentence,
            len(words),
            sentenceWordDuration,
            response,
            wordDuration,
            correctStreak,
            direction,
            reversalCount
        ])

        # Save data to disk
        sentenceDataFile.flush()
  Routine practice_question
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    TextComponent practice_response_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Experimenter: Press 1 or 0 to continue.
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    KeyboardComponent practice_response_key
      allowedKeys = '0','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_end
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    TextComponent practice_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice completed.

        Press SPACE to start the main experiment.
    KeyboardComponent practice_end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine practice_instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = C:/Users/berka/Desktop/lab/experiments/rsvp-reading-task/stimuli/practice_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sentence_id': 'P1', 'sentence': 'The little boy walked to school with his sister this morning'},
      {'sentence_id': 'P2', 'sentence': 'Sarah put her red book on the table before eating dinner'},
      {'sentence_id': 'P3', 'sentence': 'The family took a bus to the park on Sunday morning'}]
    Routine practice_fixation
    Routine practice_sentence_setup
    Routine practice_grace_period
    LoopInitiator practice_word_loop loopType="TrialHandler"
      loopType = sequential
      nReps = $len(sentence.split())
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      Routine practice_rsvp
    LoopTerminator practice_word_loop
    Routine practice_question
  LoopTerminator practice_loop
  Routine practice_end
  LoopInitiator sentence_loop loopType="TrialHandler"
    Selected rows = $sentenceOrder
    conditionsFile = C:/Users/berka/Desktop/lab/experiments/rsvp-reading-task/stimuli/rsvp_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sentence_id': 1, 'sentence': 'My father takes me to school every day in his big green car'},
      {'sentence_id': 2, 'sentence': 'Nothing could ever be better than a hot fire to warm you up'},
      {'sentence_id': 3, 'sentence': 'The old man caught a fish here when he went out in his boat'},
      {'sentence_id': 4, 'sentence': 'Our mother tells us that we should wear heavy coats outside'},
      {'sentence_id': 5, 'sentence': 'One of my brothers went with his friend to climb a mountain'},
      {'sentence_id': 6, 'sentence': 'Everyone wanted to go outside when the rain finally stopped'},
      {'sentence_id': 7, 'sentence': 'They were not able to finish playing the game before dinner'},
      {'sentence_id': 8, 'sentence': 'My father asked me to help the two men carry the box inside'},
      {'sentence_id': 9, 'sentence': 'Three of my friends had never been to a circus before today'},
      {'sentence_id': 10, 'sentence': 'My grandfather has a large garden with fruit and vegetables'},
      {'sentence_id': 11, 'sentence': 'He told a long story about ducks before his son went to bed'},
      {'sentence_id': 12, 'sentence': 'My mother loves to hear the young girls sing in the morning'},
      {'sentence_id': 13, 'sentence': 'The young boy held his hand high to ask questions in school'},
      {'sentence_id': 14, 'sentence': 'My brother wanted a glass of milk with his cake after lunch'},
      {'sentence_id': 15, 'sentence': 'I do not understand why we must leave so early for the play'},
      {'sentence_id': 16, 'sentence': 'It is more than four hundred miles from my home to the city'}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
    Routine fixation
    Routine sentence_setup
    Routine grace_period
    LoopInitiator word_loop loopType="TrialHandler"
      loopType = sequential
      nReps = $len(words)
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      Routine rsvp
    LoopTerminator word_loop
    Routine experimenter_response
  LoopTerminator sentence_loop
